PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
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Routines
  Routine instruction
    TextComponent weclomeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment
    KeyboardComponent key_welcome
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trail
    PolygonComponent polygon_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent textstudy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
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  Routine Blank500
    PolygonComponent polyback
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent textBlank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine waithere
    TextComponent textWait
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please wait

        ready press space
    KeyboardComponent key_respexit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent textEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thanks for participating 
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  Routine Testtrailcont
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textTesttrait
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_conf
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_5
      fillColor = $[1,1,1]
      pos = (0, -0.5)
      shape = rectangle
      size = (2, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent textconfscale
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text:
        1...2...3...4...5...6
        NEW.............OLD
  Routine TesttrailRFN
    PolygonComponent polyBack
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textTestwordRFN
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_TestRfn
      allowedKeys = 'f','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textRFNscale
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        (F)amiliar
        (N)either
  Routine Testresp
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textresp
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    TextComponent textQuestion
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Have you seen this word before
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    KeyboardComponent key_response
      allowedKeys = 'y','n'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Testblank
    PolygonComponent polygon_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $word
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Flow
  Routine instruction
  Routine Blank500
  LoopInitiator trialsStudy loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = selection.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('rand', 0.6715161356800474), ('word', 'thombe'), ('corr', 0), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.7949219725526878), ('word', 'myght '), ('corr', 0), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.23082417366648245), ('word', 'wrye'), ('corr', 0), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.6430859675693047), ('word', 'tapycer'), ('corr', 1), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.605378755033533), ('word', 'gyse '), ('corr', 0), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.5127003513963531), ('word', 'outen'), ('corr', 1), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.26090502290913997), ('word', 'rakel'), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.6808261247620169), ('word', 'byynge '), ('corr', 0), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.432149945333306), ('word', 'nyce'), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.9994066864386394), ('word', 'avyseth'), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.3861814392295245), ('word', 'myre'), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.20671794003513155), ('word', 'bulles '), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.8293650322081506), ('word', 'gnow '), ('corr', 1), ('oldnew', None)]),
      OrderedDict([('rand', 0.4688200676784492), ('word', 'lyst'), ('corr', 1), ('oldnew', None)]),
      OrderedDict([('rand', 0.1949120805749247), ('word', 'wityng'), ('corr', 1), ('oldnew', None)])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
    Routine trail
    Routine Blank500
  LoopTerminator trialsStudy
  Routine waithere
  Routine Blank500
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = selection.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('rand', 0.7960797324196182), ('word', 'scole'), ('corr', 0), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.17353633191881956), ('word', 'gyse '), ('corr', 0), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.9264573713862347), ('word', 'twynne'), ('corr', 0), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.07912361067950913), ('word', 'myght '), ('corr', 0), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.7219029652764332), ('word', 'gnow '), ('corr', 1), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.1953510052941131), ('word', 'outen'), ('corr', 1), ('oldnew', 'old')]),
      OrderedDict([('rand', 0.7519041707725668), ('word', 'lyst'), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.828771774099907), ('word', 'plat'), ('corr', 0), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.5938648401193931), ('word', 'myre'), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.10907610710867377), ('word', 'wrye'), ('corr', 0), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.7745174211237367), ('word', 'wityng'), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.8469973730564258), ('word', 'layser'), ('corr', 1), ('oldnew', 'new')]),
      OrderedDict([('rand', 0.2860756442479703), ('word', 'rakel'), ('corr', 1), ('oldnew', None)]),
      OrderedDict([('rand', 0.8187295958926871), ('word', 'popet'), ('corr', 0), ('oldnew', None)]),
      OrderedDict([('rand', 0.38202995516068394), ('word', 'nyce'), ('corr', 1), ('oldnew', None)])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
    Routine Testtrailcont
    Routine Testblank
    Routine TesttrailRFN
    Routine Blank500
  LoopTerminator trials
  Routine End
